PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '01', 'run': '01', 'trial_duration': '2', 'standard_vibration_freq': '20', 'target_vibration_diff': '10', 'standard_checkerboard_freq': '10', 'high_checkerboard_freq': '20'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = vibrotactile_experiment_test
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine vibe
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import numpy as np
        import nidaqmx
        import time
        # Define parameters
        initial_frequency = 100  # Initial frequency in Hz
        final_frequency = 200  # Final frequency in Hz
        sample_rate = 10000  # Sample rate in Hz
        duration = 0.2  # Total duration in seconds
        samples_per_update = int(sample_rate * 0.1)  # Number of samples for each update (100 ms)
      Begin Routine:
        # Create a task
        with nidaqmx.Task() as task:
            task.ao_channels.add_ao_voltage_chan("Dev1/ao0")  # Replace with your device name

            start_time = time.time()

            # First half duration
            for _ in range(int(sample_rate * (duration / 2) / samples_per_update)):
                # Generate the sine wave at the initial frequency
                t = np.linspace(0, 0.1, samples_per_update, endpoint=False)  # 100 ms window for each update
                sine_wave = 1 * np.sin(2 * np.pi * initial_frequency * t)  # Amplitude of 1

                # Write the sine wave to the output
                task.write(sine_wave, auto_start=True)

            # Second half duration
            for _ in range(int(sample_rate * (duration / 2) / samples_per_update)):
                # Generate the sine wave at the final frequency
                t = np.linspace(0, 0.1, samples_per_update, endpoint=False)  # 100 ms window for each update
                sine_wave = 1 * np.sin(2 * np.pi * final_frequency * t)  # Amplitude of 1

                # Write the sine wave to the output
                task.write(sine_wave, auto_start=True)

            task.stop()  # Stop the task
  Routine gabor
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  Routine routine_1
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  Routine checkerboard
    RoutineSettingsComponent checkerboard
      durationEstim = 0.250
      forceNonSlip = True
      stopVal [duration (s)] = 0.250
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    TextComponent stimulus_fixation
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.250
      text = +
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    GratingComponent grating
      mask = gauss
      opacity [set every repeat] = 1.0
      ori [set every repeat] = visual_stim_orientation
      phase = 10
      pos [set every repeat] = (-0.5, 0)
      sf = 10
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.250
      tex = sin
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  Routine trigger
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    CodeComponent code_3
      Code Type = Auto->JS
      Begin Routine:
        # Send a Trigger
  Routine cue
    RoutineSettingsComponent cue
      forceNonSlip = True
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.250
      text [set every repeat] = $cue_text
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  Routine cue_to_target
    RoutineSettingsComponent cue_to_target
      forceNonSlip = True
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine inter_stimulus_intevral
    RoutineSettingsComponent inter_stimulus_intevral
      disabled = True
      forceNonSlip = True
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    TextComponent wait
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = +
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    CodeComponent daq_load_buffer
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        # Create a task for the DAQ and run the increasing signal
        task = daq.Task()
        task.CreateAOVoltageChan(f"{device}/{channel}", "", -10.0, 10.0, daq.DAQmx_Val_Volts, None)

        # Run the task for the increasing signal
        task.CfgSampClkTiming("", sample_rate, daq.DAQmx_Val_Rising, daq.DAQmx_Val_FiniteSamps, len(sinusoids[vibration_frequency_direction]))
        task.WriteAnalogF64(len(sinusoids[vibration_frequency_direction]), False, 10.0, daq.DAQmx_Val_GroupByChannel, sinusoids[vibration_frequency_direction], None, None)
  Routine initialisation
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    CodeComponent initialisation_flicker
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np

        # Experiment parameters
        standard_freq = float(expInfo['standard_checkerboard_freq'])  # 8 Hz standard checkerboard frequency
        high_freq = float(expInfo['high_checkerboard_freq'])
        duration = float(expInfo['trial_duration'])  # seconds


        total_frames = int(60 * duration)  # assuming 60 Hz refresh rate
        midpoint = total_frames // 2  # midpoint to split the sine wave into two halves

        # Generate time arrays for each half
        t1 = np.arange(midpoint) / 60  # First half
        t2 = np.arange(midpoint, total_frames) / 60  # Second half

        # First half: constant 8 Hz sine wave
        standard_opacity_values = np.sin(2 * np.pi * standard_freq * t1)

        # Second half: increasing and decreasing frequency sine waves
        # Increasing frequency (8 Hz to 8 Hz + flicker_diff)
        high_freq_values = np.sin(2 * np.pi * (high_freq) * t2)


        # Concatenate the two halves for increasing and decreasing versions
        opacity_values_high_freq_first = np.concatenate((high_freq_values, standard_opacity_values))
        opacity_values_high_freq_second = np.concatenate((standard_opacity_values, high_freq_values))
        opacity_values_high_freq_no_change = np.concatenate((high_freq_values,  high_freq_values))
        opacity_values_standard_freq_no_change = np.concatenate((standard_opacity_values,  standard_opacity_values))

        # Store in a dictionary for later use
        opacity_values = {
            'first': opacity_values_high_freq_first,
            'second': opacity_values_high_freq_second,
            'high_freq':opacity_values_high_freq_no_change,
            'standard_freq':opacity_values_standard_freq_no_change
        }
  Routine response_period
    RoutineSettingsComponent response_period
      stopVal [duration (s)] = 0.8
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    KeyboardComponent response
      allowedKeys = 'left', 'right'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      storeCorrect = True
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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  Routine end_experiment
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Run Complete!
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    KeyboardComponent end_button
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_experiment
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Viberator Test
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine initialisation
  Routine start_experiment
  Routine trigger
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = visual_only.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('cue_text', 'Visual Only'), ('visual_stim_orientation', -5), ('correct_answer', 'left')]),
      OrderedDict([('cue_text', 'Visual Only'), ('visual_stim_orientation', 5), ('correct_answer', 'right')])]
    Routine cue
    Routine cue_to_target
    Routine checkerboard
    Routine response_period
  LoopTerminator trials
  Routine end_experiment
