PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '01', 'run': '01', 'trial_duration': '2', 'standard_vibration_freq': '20', 'target_vibration_diff': '10', 'standard_checkerboard_freq': '8', 'target_checkerboard_diff': '4'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = vibrotactile_experiment_test
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine vibe
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import numpy as np
        import nidaqmx
        import time
        # Define parameters
        initial_frequency = 100  # Initial frequency in Hz
        final_frequency = 200  # Final frequency in Hz
        sample_rate = 10000  # Sample rate in Hz
        duration = 0.2  # Total duration in seconds
        samples_per_update = int(sample_rate * 0.1)  # Number of samples for each update (100 ms)
      Begin Routine:
        # Create a task
        with nidaqmx.Task() as task:
            task.ao_channels.add_ao_voltage_chan("Dev1/ao0")  # Replace with your device name

            start_time = time.time()

            # First half duration
            for _ in range(int(sample_rate * (duration / 2) / samples_per_update)):
                # Generate the sine wave at the initial frequency
                t = np.linspace(0, 0.1, samples_per_update, endpoint=False)  # 100 ms window for each update
                sine_wave = 1 * np.sin(2 * np.pi * initial_frequency * t)  # Amplitude of 1

                # Write the sine wave to the output
                task.write(sine_wave, auto_start=True)

            # Second half duration
            for _ in range(int(sample_rate * (duration / 2) / samples_per_update)):
                # Generate the sine wave at the final frequency
                t = np.linspace(0, 0.1, samples_per_update, endpoint=False)  # 100 ms window for each update
                sine_wave = 1 * np.sin(2 * np.pi * final_frequency * t)  # Amplitude of 1

                # Write the sine wave to the output
                task.write(sine_wave, auto_start=True)

            task.stop()  # Stop the task
  Routine gabor
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  Routine routine_1
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  Routine checkerboard
    RoutineSettingsComponent checkerboard
      durationEstim = 0.5
      forceNonSlip = True
      stopVal [duration (s)] = 0.5
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    TextComponent stimulus_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    RadialStimComponent radial
      angularCycles = 10
      angularPhase = 0
      color = $[1,1,1]
      colorSpace = rgb
      contrast = 1.0
      interpolate = Linear
      opacity [set every frame] = opacity_values[checkerboard_frequency_direction][frameN % total_frames]
      ori = 0
      pos = (0, 0)
      radialCycles = 10
      radialPhase = 0
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      syncScreenRefresh = True
      tex = sqrXsqr
      texture resolution = 128
      units = from exp settings
      visibleWedge = (0, 180)
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    CodeComponent vibration
      Code Type = Py
      disabled = True
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      Begin Routine:
        task.StartTask()
      End Routine:
        task.StopTask()
        task.ClearTask()
  Routine trigger
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    CodeComponent code_3
      Code Type = Auto->JS
      Begin Routine:
        # Send a Trigger
  Routine cue
    RoutineSettingsComponent cue
      forceNonSlip = True
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cue_text
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  Routine cue_to_target
    RoutineSettingsComponent cue_to_target
      forceNonSlip = True
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine inter_stimulus_intevral
    RoutineSettingsComponent inter_stimulus_intevral
      forceNonSlip = True
      stopVal [duration (s)] = 4
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    TextComponent wait
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = +
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    CodeComponent daq_load_buffer
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        # Create a task for the DAQ and run the increasing signal
        task = daq.Task()
        task.CreateAOVoltageChan(f"{device}/{channel}", "", -10.0, 10.0, daq.DAQmx_Val_Volts, None)

        # Run the task for the increasing signal
        task.CfgSampClkTiming("", sample_rate, daq.DAQmx_Val_Rising, daq.DAQmx_Val_FiniteSamps, len(sinusoids[vibration_frequency_direction]))
        task.WriteAnalogF64(len(sinusoids[vibration_frequency_direction]), False, 10.0, daq.DAQmx_Val_GroupByChannel, sinusoids[vibration_frequency_direction], None, None)
  Routine initialisation
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    CodeComponent initialisation_vibration
      Code Type = Py
      disabled = True
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      Begin Experiment:
        import numpy as np
        import PyDAQmx as daq
        from psychopy import core, visual
        import time
        import matplotlib.pyplot as plt

        # DAQ configuration
        device = "Dev1"  # Change this to match your device name
        channel = "ao0"  # Analog output channel
        sample_rate = 100000  # Hz
        duration = float(expInfo['trial_duration'])  #seeconds

        # Generate time array
        t = np.linspace(0, duration, int(sample_rate * duration), endpoint=False)

        # Frequency and amplitude
        start_frequency = 20  # Hz
        amplitude = 1.0  # Volts

        # Split the time array into two halves
        midpoint = len(t) // 2
        t1 = t[:midpoint]  # First half
        t2 = t[midpoint:]  # Second half

        # Generate the sine waves for increasing frequency (20 Hz to 30 Hz)
        frequency_1_increase = start_frequency  # Start at 20 Hz
        frequency_2_increase = start_frequency + float(expInfo['target_vibration_diff'])   # End at 30 Hz
        sinusoid_increase_1 = amplitude * np.sin(2 * np.pi * frequency_1_increase * t1)
        sinusoid_increase_2 = amplitude * np.sin(2 * np.pi * frequency_2_increase * t2)
        sinusoid_increase = np.concatenate((sinusoid_increase_1, sinusoid_increase_2))

        # Generate the sine waves for decreasing frequency (20 Hz to 10 Hz)
        frequency_1_decrease = start_frequency  # Start at 20 Hz
        frequency_2_decrease = start_frequency - float(expInfo['target_vibration_diff'])   # End at 10 Hz
        sinusoid_decrease_1 = amplitude * np.sin(2 * np.pi * frequency_1_decrease * t1)
        sinusoid_decrease_2 = amplitude * np.sin(2 * np.pi * frequency_2_decrease * t2)
        sinusoid_decrease = np.concatenate((sinusoid_decrease_1, sinusoid_decrease_2))

        # Store in Dictionary
        sinusoids = {'increase' : sinusoid_increase,
                     'decrease' : sinusoid_decrease}
    CodeComponent initialisation_flicker
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np

        # Experiment parameters
        standard_freq = float(expInfo['standard_checkerboard_freq'])  # 8 Hz standard checkerboard frequency
        duration = float(expInfo['trial_duration'])  # seconds
        flicker_diff = float(expInfo['target_checkerboard_diff'])  # difference for increasing/decreasing frequency

        total_frames = int(60 * duration)  # assuming 60 Hz refresh rate
        midpoint = total_frames // 2  # midpoint to split the sine wave into two halves

        # Generate time arrays for each half
        t1 = np.arange(midpoint) / 60  # First half
        t2 = np.arange(midpoint, total_frames) / 60  # Second half

        # First half: constant 8 Hz sine wave
        standard_opacity_values = np.sin(2 * np.pi * standard_freq * t1)

        # Second half: increasing and decreasing frequency sine waves
        # Increasing frequency (8 Hz to 8 Hz + flicker_diff)
        increasing_freq = np.sin(2 * np.pi * (standard_freq + flicker_diff) * t2)

        # Decreasing frequency (8 Hz to 8 Hz - flicker_diff)
        decreasing_freq = np.sin(2 * np.pi * (standard_freq - flicker_diff) * t2)

        # Concatenate the two halves for increasing and decreasing versions
        opacity_values_increase = np.concatenate((standard_opacity_values, increasing_freq))
        opacity_values_decrease = np.concatenate((standard_opacity_values, decreasing_freq))

        # Store in a dictionary for later use
        opacity_values = {
            'increase': opacity_values_increase,
            'decrease': opacity_values_decrease
        }
  Routine response_period
    RoutineSettingsComponent response_period
      stopVal [duration (s)] = 1.5
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    KeyboardComponent response
      allowedKeys = 'up', 'down'
      correctAns = $correct_answer
      forceEndRoutine = False
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine end_experiment
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Run Complete!
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    KeyboardComponent end_button
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_experiment
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Viberator Test
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine initialisation
  Routine start_experiment
  Routine trigger
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_info.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_number': 1, 'cue_text': 'Visual', 'vibration_frequency_direction': 'increase', 'checkerboard_frequency_direction': 'decrease', 'inter_stimulus_interval': None, 'cue_to_target_interval': None, 'correct_answer': 'down'},
      {'trial_number': 2, 'cue_text': 'Visual', 'vibration_frequency_direction': 'decrease', 'checkerboard_frequency_direction': 'increase', 'inter_stimulus_interval': None, 'cue_to_target_interval': None, 'correct_answer': 'up'},
      {'trial_number': 3, 'cue_text': 'Vibration', 'vibration_frequency_direction': 'increase', 'checkerboard_frequency_direction': 'decrease', 'inter_stimulus_interval': None, 'cue_to_target_interval': None, 'correct_answer': 'up'},
      {'trial_number': 4, 'cue_text': 'Vibration', 'vibration_frequency_direction': 'decrease', 'checkerboard_frequency_direction': 'increase', 'inter_stimulus_interval': None, 'cue_to_target_interval': None, 'correct_answer': 'down'},
      {'trial_number': 5, 'cue_text': 'Visual', 'vibration_frequency_direction': 'increase', 'checkerboard_frequency_direction': 'decrease', 'inter_stimulus_interval': None, 'cue_to_target_interval': None, 'correct_answer': 'down'},
      {'trial_number': 6, 'cue_text': 'Visual', 'vibration_frequency_direction': 'decrease', 'checkerboard_frequency_direction': 'increase', 'inter_stimulus_interval': None, 'cue_to_target_interval': None, 'correct_answer': 'up'}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
    Routine inter_stimulus_intevral
    Routine cue
    Routine cue_to_target
    Routine checkerboard
    Routine response_period
  LoopTerminator trials
  Routine end_experiment
